{
    "info": {
        "name": "Enter a name for this experiment.",
        "description": "Description of what the experiment is.",
        "create_date": "July 04 1776",
        "version": "0.0",
        "run_notes": "None as of yet"
    },
    "deck": {
        "Container name": {
            "labware": "Container type",
            "slot": "Deck slot"
        }
    },
    "head": {
        "tool-name": {
            "tool": "pipette",
            "tip-racks": [
                {
                    "container": "p10-rack"
                }
            ],
            "trash-container": {
                "container": "trash"
            },
            "multi-channel": false,
            "axis": "a",
            "volume": 10,
            "down-plunger-speed": 300,
            "up-plunger-speed": 500,
            "tip-plunge": 8,
            "extra-pull-volume": 20,
            "extra-pull-delay": 200,
            "distribute-percentage": 0.1,
        }
    },
    "ingredients": {
        "ReagentA": 
        [
          {
            "container": "Container name",
            "location": "Well in container",
            "volume": 1000
          }
        ]
    },

    "instructions": [
        {
            "tool": "p10",
            "groups": [
                {
                    "transfer": [
                        {
                            "from": {
                                "container": "plate-1",
                                "location": "H7",
                                "tip-offset": 0,
                                "delay": 0,
                                "touch-tip": false
                            },
                            "to": {
                                "container": "plate-1",
                                "location": "A1",
                                "touch-tip": false
                            },
                            "volume": 10,
                            "blowout": true
                        }
                    ]
                }
            ]
        }
    ]
}